
//methods
travelTimeCalc(double xPos, double yPos, double zPos, Double[] stageSpeeds){
	print("I'm in the travelTimeCalc method!");
	double xTime = xPos/stageSpeeds[0];
	print(xTime);
	double yTime = yPos/stageSpeeds[1];
	print(yTime);
	double zTime = zPos/stageSpeeds[2];
	print(zTime);

	if(xTime > yTime && xTime > zTime){
		print(xTime);
		mmc.sleep(xTime);
	}
	else if(yTime > xTime && yTime > zTime){
		print(yTime);
		mmc.sleep(yTime);
	}
	else if(zTime > xTime && zTime > yTime){
		print(zTime);
		mmc.sleep(zTime);
	}
	else{
		print(10000);
		mmc.sleep(10000);
	}
}

homing(String[] stages){
	for (int i = 0; i < stages.length; i++) {
	    s = stages[i];
	    s = mmc.getFocusDevice();
	    print("Homing " + s + "...");
	    mmc.home(s);
	    mmc.waitForDevice(s);
	    print("Finished homing " + s);
	}
}

zeroStages(String[] stages){
	print("I'm in the zero method!");
	double xPos = mmc.getPosition(stages[0]);
	double yPos = mmc.getPosition(stages[1]);
	double zPos = mmc.getPosition(stages[2]);
	
	mmc.setPosition(stages[0], 0);
 	mmc.setPosition(stages[1], 0);
 	mmc.setPosition(stages[2], 0);

 	travelTimeCalc(xPos,yPos,zPos,speeds);
}

//------END METHODS------------------------------------

//Create array to store stage labels
 //Array stores stages in x, y, z order
 	stages = new String[]{"LTS300_45186414", "KDC101_27750181", "KDC101_27750156"};
 	speeds = new Double[]{20.0,2.4,2.4};

/*Initialize stage variables:
 * Variables start with axis of stage
 * Start: desired starting position in um
 * Step: desired step size in um
 * TileNum: the number of images collected along that dimension
 * CurrPos: initialized for creating stage sequences
 */
	double xStart = 100000;
	double xStep = 2500;
	double xTileNum = 5;
	double xCurrPos = xStart;
			
	double yStart = 25000;
	double yStep = 2500;
	double yTileNum = 2;
	double yCurrPos = yStart;

	double zStart = 24000;
	double zStep = 2500;
	double zTileNum = 2;
	double zCurrPos = zStart;

//Initializes the variable that determines the location of the generated position data in the posList arrays
	int currLine = 0;
//Total number of lines/how big the posList arrays should be
	int numLines = xTileNum * yTileNum * zTileNum;

//Initialization of double arrays that are used to store the stage position info for tiling
 	Double[] xPosList = new Double[numLines];
 	Double[] yPosList = new Double[numLines];
 	Double[] zPosList = new Double[numLines];

//Loops designed to populate the posList arrays
 	for(int i = 0; i < zTileNum; i++){
 		for(int j = 0; j < yTileNum; j++) {
 			for(int k = 0; k < xTileNum; k++) {
	 			xPosList[currLine] = Double.valueOf(xCurrPos);
	 			yPosList[currLine] = Double.valueOf(yCurrPos);
	 			zPosList[currLine] = Double.valueOf(zCurrPos);
	
				//print(xCurrPos + " " + yCurrPos + "\n");
	 			xCurrPos = xCurrPos + xStep;
	 			currLine++;
 			}
	 		xCurrPos = xStart;
	 		yCurrPos = yCurrPos + yStep;
 		}
 		xCurrPos = xStart;
 		yCurrPos = yStart;
 		zCurrPos += zStep;
 	}
 	
	zeroStages(stages);
 	//homing(stages);

	mmc.setPosition(stages[0], xStart);
	mmc.setPosition(stages[1], yStart);
	mmc.setPosition(stages[2], zStart);

	travelTimeCalc(xStart,yStart,zStart,speeds);

//Theoretically should step throught the stage sequences and move through the stages
//might have to load the stages first
 	for(k = 0; k < numLines; k++){
 		mmc.setPosition(stages[2],zPosList[k]);
 		mmc.waitForDevice(stages[2]);
 		
 		mmc.setPosition(stages[1],yPosList[k]);
 		mmc.waitForDevice(stages[1]);
 		
 		mmc.setPosition(stages[0],xPosList[k]);
 		mmc.waitForDevice(stages[0]);
		
 	}

	zeroStages(stages);
 	
